PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  color = $[-1, -1, -1]
  Experiment info = {u'type': u'1', u'participant': u'9999'}
  Units = use prefs
  Save excel file = True
  Window size (pixels) = [1024, 764]
  Full-screen window = False
  Save csv file = True
  Save log file = False
  expName = psreff
  Screen = 1
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Routines
  Routine cross_iti
    CodeComponent code_3
      Begin Routine:
        curr_t = min(3.8, max(0.6, random.gauss(1, 0.5)))
    TextComponent cross_sign
      text = +
      stopVal [duration (s)] = $curr_t
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine stroop_cue_2
    TextComponent text_3
      text [set every repeat] = $axcpt_cue
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine prac_ann_2
  Routine var_time
    TextComponent text_6
      text = +
      stopVal [duration (s)] = $curr_t
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine ev_feedback
    CodeComponent code_7
      Begin Routine:
        if ev_resp.keys == '1':
            opt_1 = [1, 0.84, 0.0]
            opt_2, opt_3, opt_4, opt_5 = [0.2, 0.2, 0.2], [0.2, 0.2, 0.2], [0.2, 0.2, 0.2], [0.2, 0.2, 0.2]
        elif ev_resp.keys == '2':
            opt_2 = [1, 0.84, 0.0]
            opt_1, opt_3, opt_4, opt_5 = [0.2, 0.2, 0.2], [0.2, 0.2, 0.2], [0.2, 0.2, 0.2], [0.2, 0.2, 0.2]
        elif ev_resp.keys == '3':
            opt_3 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_4, opt_5 = [0.2, 0.2, 0.2], [0.2, 0.2, 0.2], [0.2, 0.2, 0.2], [0.2, 0.2, 0.2]
        elif ev_resp.keys == '4':
            opt_4 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_3, opt_5 = [0.2, 0.2, 0.2], [0.2, 0.2, 0.2], [0.2, 0.2, 0.2], [0.2, 0.2, 0.2]
        elif ev_resp.keys == '5':
            opt_5 = [1, 0.84, 0.0]
            opt_1, opt_2, opt_3, opt_4 = [0.2, 0.2, 0.2], [0.2, 0.2, 0.2], [0.2, 0.2, 0.2], [0.2, 0.2, 0.2]
      End Routine:
        # run_ev, run_effort, run_stroop
        if type == 2:
            run_ev, run_stroop, run_effort, run_rew = 0, 1, 0, 1
        elif type == 3:
            run_effort, run_ev, run_stroop, run_rew = 0, 0, 1, 0
        elif type == 4:
            abs_trial += 1
            run_effort, run_stroop, run_ev, run_rew = 0, 0, 0, 1
        elif type == 5:
            run_stroop, run_ev, run_effort, run_rew = 0, 0, 1, 0
        elif type == 6:
            abs_trial += 1
            run_stroop, run_effort, run_ev, run_rew = 0, 0, 0, 1
    PolygonComponent first_feedback
      fillColor [set every repeat] = $opt_1
      stopVal [duration (s)] = 1
      pos = [-0.6, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    PolygonComponent second_feedback
      fillColor [set every repeat] = $opt_2
      stopVal [duration (s)] = 1
      pos = [-0.3, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    PolygonComponent third_feedback
      fillColor [set every repeat] = $opt_3
      stopVal [duration (s)] = 1
      pos = [0.0, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    PolygonComponent fourth_feedback
      fillColor [set every repeat] = $opt_4
      stopVal [duration (s)] = 1
      pos = [0.3, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    PolygonComponent fifth_feedback
      fillColor [set every repeat] = $opt_5
      stopVal [duration (s)] = 1
      pos = [0.6, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    TextComponent text_17
      text = 1
      stopVal [duration (s)] = 1.0
      pos = [-0.6, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_18
      text = 2
      stopVal [duration (s)] = 1.0
      pos = [-0.3, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_19
      text = 3
      stopVal [duration (s)] = 1.0
      pos = [0.0, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_20
      text = 4
      stopVal [duration (s)] = 1.0
      pos = [0.3, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_21
      text = 5
      stopVal [duration (s)] = 1.0
      pos = [0.6, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine trial
  Routine effort_ann
    TextComponent text_23
      text = Now comes the squeeze game!
      stopVal [duration (s)] = 1.0
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine effort_task
    TextComponent text_11
      text = Effort task placeholder
      stopVal [duration (s)] = 1.0
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code_9
      End Routine:
        # run_ev, run_effort, run_stroop
        if type == 2:
            run_ev, run_stroop, run_effort, run_rew = 1, 0, 0, 1
            abs_trial += 1
        elif type == 3:
            run_prac = 0 # this needs to be here in order to prevent
                         # it from popping up unnecessarily
            run_effort, run_ev, run_stroop, run_rew = 0, 1, 0, 0
        elif type == 4:
            run_effort, run_stroop, run_ev, run_rew = 0, 1, 1, 0
        elif type == 5:
            run_stroop, run_ev, run_effort, run_rew = 0, 0, 0, 1
            abs_trial += 1
        elif type == 6:
            run_stroop, run_effort, run_ev, run_rew = 0, 0, 1, 0
  Routine stroop_cue
    TextComponent text_24
      text [set every repeat] = $axcpt_cue
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine instr1
    KeyboardComponent instr1_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Begin Experiment:
        import random

        # we add + 1 just to make key type be either 1 or 2
        # If axcpt_key_type == 1 then:
        # key 'f' denotes X did follow A
        # key 'k' denotes A was not followed by X or
        #                 X was not preceeded by A

        # if axcpt_key_type == 2 then, the opposite is true:
        # key 'k' denotes X did follow A
        # key 'f' denotes A was not followed by X or
        #                 X was not preceeded by A

        axcpt_key_type = int(round(random.random())) + 1

        # define colours used in the questions
        opt_1, opt_2, opt_3, opt_4, opt_5 = [0.2, 0.2, 0.2], \
                                            [0.2, 0.2, 0.2], \
                                            [0.2, 0.2, 0.2], \
                                            [0.2, 0.2, 0.2], \
                                            [0.2, 0.2, 0.2]

        # feedback color, may not be used in the future
        feed_col = [-1, -1, -1]

        # absolute trial counter; including practice trials
        abs_trial = 1

        # used to run either practice or real trials
        run_prac = 1
        run_real = 0



        # needs to be stored
        # - ev response and RT
        # - stroop response and RT
        # -
      Begin Routine:
        # Depending on 'type' that's put in, we manually construct the
        # experimental design matrix that's used to determine
        # the flow of tasks after each task. The ugliness of the
        # basic psychopy outcome that would have been obtained will
        # be mitigated by a custom saving script.
        # it isn't necessary to have the complete matrix layout
        # in all cases, but I am doing it here for sake of completeness

        type = int(expInfo['type'])

        run_ev, run_effort, run_stroop, run_rew = 1, 1, 1, 1

        # run_ev, run_effort, run_stroop, run_rew
        # here run_rew can be defined as 1 in all conditions
        # because it will be changed during the task flow


        if type == 1:
            run_ev, run_effort, run_stroop, run_rew = 1, 1, 1, 1
        elif type == 2:
            run_ev, run_stroop, run_effort, run_rew = 1, 0, 1, 1
        elif type == 3:
            run_effort, run_ev, run_stroop, run_rew  = 1, 0, 0, 1
        elif type == 4:
            run_effort, run_stroop, run_ev, run_rew  = 1, 1, 0, 1
        elif type == 5:
            run_stroop, run_ev, run_effort, run_rew  = 1, 0, 0, 1
        elif type == 6:
            run_stroop, run_effort, run_ev, run_rew  = 1, 0, 0, 1
    TextComponent text_7
      text = Instructions placeholder
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent text_9
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1.0
      letterHeight = 0.1
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  Routine prac_ann
    TextComponent text_8
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        First a series of practice trials
        will follow to familiarise you with this game!
    TextComponent text_10
      text = Press SPACE to continue!
      pos = (0, -0.6)
      startVal [time (s)] = 1
      letterHeight = 0.1
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine real_ann
  Routine rew_ann
    CodeComponent code
      Begin Routine:
        if reward_type == 1:
            curr_reward = 'juice.png'
        else:
            curr_reward = 'pound.png'
      End Routine:
        # run_ev, run_effort, run_stroop
        if type == 2:
            run_ev, run_stroop, run_effort, run_rew = 1, 1, 0, 0
            abs_trial += 1
        elif type == 3:
            run_effort, run_ev, run_stroop, run_rew = 1, 0, 0, 0
        elif type == 4:
            run_effort, run_stroop, run_ev, run_rew = 1, 1, 0, 0
        elif type == 5:
            run_stroop, run_ev, run_effort, run_rew = 1, 0, 0, 0
            abs_trial += 1
        elif type == 6:
            run_stroop, run_effort, run_ev, run_rew = 1, 0, 0, 0
    TextComponent text_2
      text = On this trial you will play for:
      stopVal [duration (s)] = 3
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    ImageComponent image
      stopVal [duration (s)] = 3
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      image [set every repeat] = $curr_reward
      size = (1, 1)
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  Routine stroop_target
    TextComponent text_4
      text [set every repeat] = $axcpt_target
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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    KeyboardComponent axcpt_resp
      forceEndRoutine = True
      allowedKeys = 'f', 'k'
      startVal [time (s)] = 0.0
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    CodeComponent code_8
      Each Frame:
        curr_t = min(3.8, max(0.6, random.gauss(1, 0.5)))

        if axcpt_resp.keys:
            feed_col = [1, 1, 1]
            responded = 0.5
            done = 2
        else:
            feed_col = [-1, -1, -1]
  Routine stroop_feed
    CodeComponent code_6
      Begin Routine:
        run_prac = 0

        if abs_trial == 20:
            run_real = 1

        if  axcpt_resp.keys == 'f' and axcpt_key_type == 1:
            part_resp = 1
        elif axcpt_resp.keys == 'k' and axcpt_key_type == 2:
            part_resp = 1
        else:
            part_resp = 2


        if correct_response == 1 and part_resp == 1 or \
            correct_response == 2 and part_resp == 2:

            given_feedback = "correct.png"
        else:
            given_feedback = "wrong.png"
      End Routine:
        # run_ev, run_effort, run_stroop

        if type == 1:
            abs_trial += 1

        if type == 2:
            run_ev, run_effort, run_stroop, run_rew = 0, 1, 0, 0
        elif type == 3:
            run_effort, run_ev, run_stroop, run_rew = 0, 0, 0, 1
            abs_trial += 1
        elif type == 4:
            run_effort, run_stroop, run_ev, run_rew = 1, 0, 1, 0
        elif type == 5:
            run_stroop, run_ev, run_effort, run_rew = 0, 1, 1, 0
        elif type == 6:
            run_stroop, run_effort, run_ev, run_rew = 0, 1, 0, 0
    ImageComponent image_2
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      image [set every repeat] = $given_feedback
      size = (0.5, 0.5)
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  Routine ev_prompt
    KeyboardComponent ev_resp
      forceEndRoutine = True
      allowedKeys = '1', '2', '3', '4', '5'
      startVal [time (s)] = 0.0
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    CodeComponent code_4
      Begin Routine:
        curr_q = current_question
    TextComponent text_5
      text [set every repeat] = $current_question
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    PolygonComponent first
      fillColor = $[0.2, 0.2, 0.2]
      pos = [-0.6, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    PolygonComponent second
      fillColor = $[0.2, 0.2, 0.2]
      pos = [-0.3, -0.6]
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    PolygonComponent third
      fillColor = $[0.2, 0.2, 0.2]
      pos = [0, -0.6]
      lineWidth = 10
      lineColor = $[0, 0, 0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    PolygonComponent fourth
      fillColor = $[0.2, 0.2, 0.2]
      pos = [0.3, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    PolygonComponent fifth
      fillColor = $[0.2, 0.2, 0.2]
      pos = [0.6, -0.6]
      lineWidth = 10
      lineColor = $[0,0,0]
      startVal [time (s)] = 0.0
      nVertices = 90
      size = (0.25, 0.3)
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    TextComponent text_12
      text = 1
      pos = [-0.6, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_13
      text = 2
      pos = [-0.3, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_14
      text = 3
      pos = [0.0, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_15
      text = 4
      pos = [0.3, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    TextComponent text_16
      text = 5
      pos = [0.6, -0.6]
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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  Routine stroop_ann
    TextComponent text_22
      text = Now comes the concentration game!
      stopVal [duration (s)] = 1.0
      pos = (0, 0.6)
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine cross_start
    CodeComponent code_5
      Begin Routine:
        curr_t = min(2.1, max(0, random.gauss(520, 0.5)))
        axcpt_cue = cue
        axcpt_target = target
    TextComponent text
      text = +
      stopVal [duration (s)] = $curr_t
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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Flow
  Routine instr1
  LoopInitiator main_loop loopType="TrialHandler"
    conditionsFile = main_trials.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'cue': u'A', 'reward_type': 1, 'target': u'X'},
      {'cue': u'A', 'reward_type': 2, 'target': u'X'},
      {'cue': u'A', 'reward_type': 1, 'target': u'Y'},
      {'cue': u'A', 'reward_type': 1, 'target': u'Y'},
      {'cue': u'B', 'reward_type': 2, 'target': u'Y'},
      {'cue': u'B', 'reward_type': 2, 'target': u'X'},
      {'cue': u'A', 'reward_type': 1, 'target': u'X'},
      {'cue': u'B', 'reward_type': 2, 'target': u'X'},
      {'cue': u'A', 'reward_type': 1, 'target': u'Y'}]
    LoopInitiator prac_info loopType="TrialHandler"
      loopType = random
      nReps = $run_prac
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      Routine prac_ann
    LoopTerminator prac_info
    LoopInitiator real_info loopType="TrialHandler"
      loopType = random
      nReps = run_real
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      Routine real_ann
    LoopTerminator real_info
    LoopInitiator rew_role loopType="TrialHandler"
      loopType = random
      nReps = run_rew
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      Routine cross_iti
      Routine rew_ann
    LoopTerminator rew_role
    LoopInitiator ev_role loopType="TrialHandler"
      loopType = random
      nReps = run_ev
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      Routine cross_iti
      LoopInitiator cb_loop2 loopType="TrialHandler"
        conditionsFile = ev.csv
        loopType = random
        nReps = 1
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        conditions:
          [{'current_question': u'firstq'},
          {'current_question': u'secondq'},
          {'current_question': u'thirdq'},
          {'current_question': u'fourthq'}]
        Routine ev_prompt
        Routine ev_feedback
      LoopTerminator cb_loop2
    LoopTerminator ev_role
    LoopInitiator effort_role loopType="TrialHandler"
      loopType = random
      nReps = run_effort
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      Routine effort_ann
      Routine cross_iti
      LoopInitiator cb_loop3 loopType="TrialHandler"
        loopType = random
        nReps = 5
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        Routine effort_task
      LoopTerminator cb_loop3
    LoopTerminator effort_role
    LoopInitiator stroop_role loopType="TrialHandler"
      loopType = random
      nReps = run_stroop
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      Routine stroop_ann
      Routine cross_start
      Routine stroop_cue
      Routine var_time
      Routine stroop_target
      Routine stroop_feed
      Routine cross_iti
    LoopTerminator stroop_role
  LoopTerminator main_loop
